<Feature xmlns="http://www.sila-standard.org" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" Category="instruments" FeatureVersion="1.0" MaturityLevel="Draft" Originator="bio.differential" SiLA2Version="1.0" xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
  <Identifier>PlateHandler</Identifier>
  <DisplayName>Plate Handler</DisplayName>
  <Description>Plate handler operations from open-cytomat PlateHandler.</Description>

  <DataTypeDefinition>
    <Identifier>PlateShuttleSystemStatusType</Identifier>
    <DisplayName>Plate Shuttle System Status</DisplayName>
    <Description>Plate shuttle system status bits.</Description>
    <DataType>
      <Structure>
        <Element><Identifier>TransferStationOccupied</Identifier><DisplayName>Transfer Station Occupied</DisplayName><Description>Transfer station occupancy.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>DeviceDoorOpen</Identifier><DisplayName>Device Door Open</DisplayName><Description>Device door state.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>TransferDoorOpen</Identifier><DisplayName>Transfer Door Open</DisplayName><Description>Transfer door state.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>ShovelOccupied</Identifier><DisplayName>Shovel Occupied</DisplayName><Description>Shovel occupancy.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>Error</Identifier><DisplayName>Error</DisplayName><Description>Error bit.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>Warning</Identifier><DisplayName>Warning</DisplayName><Description>Warning bit.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>Ready</Identifier><DisplayName>Ready</DisplayName><Description>Ready bit.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>Busy</Identifier><DisplayName>Busy</DisplayName><Description>Busy bit.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
      </Structure>
    </DataType>
  </DataTypeDefinition>

  <DataTypeDefinition>
    <Identifier>OverviewStatusType</Identifier>
    <DisplayName>Overview Status</DisplayName>
    <Description>Global command and occupancy overview bits.</Description>
    <DataType>
      <Structure>
        <Element><Identifier>CommandInProcess</Identifier><DisplayName>Command In Process</DisplayName><Description>Command in process.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>CommandExecutedDeviceBusy</Identifier><DisplayName>Command Executed Device Busy</DisplayName><Description>Command completed but device still busy.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>WarningPending</Identifier><DisplayName>Warning Pending</DisplayName><Description>Warning pending.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>ErrorPending</Identifier><DisplayName>Error Pending</DisplayName><Description>Error pending.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>ShovelOccupied</Identifier><DisplayName>Shovel Occupied</DisplayName><Description>Shovel occupied.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>AutoLiftDoorOpen</Identifier><DisplayName>Auto Lift Door Open</DisplayName><Description>Autolift door state.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>DeviceDoorOpen</Identifier><DisplayName>Device Door Open</DisplayName><Description>Device door state.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
        <Element><Identifier>TransferStationOccupied</Identifier><DisplayName>Transfer Station Occupied</DisplayName><Description>Transfer station occupancy.</Description><DataType><Basic>Boolean</Basic></DataType></Element>
      </Structure>
    </DataType>
  </DataTypeDefinition>

  <DataTypeDefinition>
    <Identifier>ActionStatusType</Identifier>
    <DisplayName>Action Status</DisplayName>
    <Description>Current low-level action details.</Description>
    <DataType>
      <Structure>
        <Element><Identifier>Type</Identifier><DisplayName>Type</DisplayName><Description>Action type code.</Description><DataType><Basic>Integer</Basic></DataType></Element>
        <Element><Identifier>Target</Identifier><DisplayName>Target</DisplayName><Description>Action target code.</Description><DataType><Basic>Integer</Basic></DataType></Element>
      </Structure>
    </DataType>
  </DataTypeDefinition>

  <DataTypeDefinition>
    <Identifier>StatusType</Identifier>
    <DisplayName>Status</DisplayName>
    <Description>Full Cytomat status snapshot.</Description>
    <DataType>
      <Structure>
        <Element><Identifier>PlateShuttleSystem</Identifier><DisplayName>Plate Shuttle System</DisplayName><Description>Plate shuttle subsystem status.</Description><DataType><DataTypeIdentifier>PlateShuttleSystemStatusType</DataTypeIdentifier></DataType></Element>
        <Element><Identifier>Overview</Identifier><DisplayName>Overview</DisplayName><Description>Global overview status.</Description><DataType><DataTypeIdentifier>OverviewStatusType</DataTypeIdentifier></DataType></Element>
        <Element><Identifier>Action</Identifier><DisplayName>Action</DisplayName><Description>Current action status.</Description><DataType><DataTypeIdentifier>ActionStatusType</DataTypeIdentifier></DataType></Element>
        <Element><Identifier>Error</Identifier><DisplayName>Error</DisplayName><Description>Error status code.</Description><DataType><Basic>Integer</Basic></DataType></Element>
        <Element><Identifier>Warning</Identifier><DisplayName>Warning</DisplayName><Description>Warning status code.</Description><DataType><Basic>Integer</Basic></DataType></Element>
      </Structure>
    </DataType>
  </DataTypeDefinition>

  <Command><Identifier>Initialize</Identifier><DisplayName>Initialize</DisplayName><Description>Initialize plate handler.</Description><Observable>No</Observable><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>MovePlateFromTransferStationToSlot</Identifier><DisplayName>Move Plate From Transfer Station To Slot</DisplayName><Description>Move from transfer station to slot.</Description><Observable>No</Observable><Parameter><Identifier>Slot</Identifier><DisplayName>Slot</DisplayName><Description>1-based slot number.</Description><DataType><Basic>Integer</Basic></DataType></Parameter><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>MovePlateFromSlotToTransferStation</Identifier><DisplayName>Move Plate From Slot To Transfer Station</DisplayName><Description>Move from slot to transfer station.</Description><Observable>No</Observable><Parameter><Identifier>Slot</Identifier><DisplayName>Slot</DisplayName><Description>1-based slot number.</Description><DataType><Basic>Integer</Basic></DataType></Parameter><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>ExecuteLowLevel</Identifier><DisplayName>Execute Low Level</DisplayName><Description>Execute low-level command.</Description><Observable>No</Observable><Parameter><Identifier>Command</Identifier><DisplayName>Command</DisplayName><Description>Low-level Cytomat command.</Description><DataType><Basic>String</Basic></DataType></Parameter><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>MovePlateFromTransferStationToHandler</Identifier><DisplayName>Move Plate From Transfer Station To Handler</DisplayName><Description>Move from transfer station to handler.</Description><Observable>No</Observable><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>MovePlateFromHandlerToTransferStation</Identifier><DisplayName>Move Plate From Handler To Transfer Station</DisplayName><Description>Move from handler to transfer station.</Description><Observable>No</Observable><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>MovePlateFromExposedPositionToInside</Identifier><DisplayName>Move Plate From Exposed Position To Inside</DisplayName><Description>Move from exposed position to inside.</Description><Observable>No</Observable><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>MovePlateFromInsideToExposedPosition</Identifier><DisplayName>Move Plate From Inside To Exposed Position</DisplayName><Description>Move from inside to exposed position.</Description><Observable>No</Observable><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>MovePlateFromHandlerToSlot</Identifier><DisplayName>Move Plate From Handler To Slot</DisplayName><Description>Move from handler to slot.</Description><Observable>No</Observable><Parameter><Identifier>Slot</Identifier><DisplayName>Slot</DisplayName><Description>1-based slot number.</Description><DataType><Basic>Integer</Basic></DataType></Parameter><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>MovePlateFromSlotToHandler</Identifier><DisplayName>Move Plate From Slot To Handler</DisplayName><Description>Move from slot to handler.</Description><Observable>No</Observable><Parameter><Identifier>Slot</Identifier><DisplayName>Slot</DisplayName><Description>1-based slot number.</Description><DataType><Basic>Integer</Basic></DataType></Parameter><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>MovePlateFromExposedPositionToSlot</Identifier><DisplayName>Move Plate From Exposed Position To Slot</DisplayName><Description>Move from exposed position to slot.</Description><Observable>No</Observable><Parameter><Identifier>Slot</Identifier><DisplayName>Slot</DisplayName><Description>1-based slot number.</Description><DataType><Basic>Integer</Basic></DataType></Parameter><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>MovePlateFromSlotToExposedPosition</Identifier><DisplayName>Move Plate From Slot To Exposed Position</DisplayName><Description>Move from slot to exposed position.</Description><Observable>No</Observable><Parameter><Identifier>Slot</Identifier><DisplayName>Slot</DisplayName><Description>1-based slot number.</Description><DataType><Basic>Integer</Basic></DataType></Parameter><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>RetractShovel</Identifier><DisplayName>Retract Shovel</DisplayName><Description>Retract shovel.</Description><Observable>No</Observable><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>ExtendShovel</Identifier><DisplayName>Extend Shovel</DisplayName><Description>Extend shovel.</Description><Observable>No</Observable><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>CloseTransferDoor</Identifier><DisplayName>Close Transfer Door</DisplayName><Description>Close transfer door.</Description><Observable>No</Observable><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>OpenTransferDoor</Identifier><DisplayName>Open Transfer Door</DisplayName><Description>Open transfer door.</Description><Observable>No</Observable><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>
  <Command><Identifier>ResetHandlerPosition</Identifier><DisplayName>Reset Handler Position</DisplayName><Description>Reset handler position.</Description><Observable>No</Observable><Response><Identifier>Status</Identifier><DisplayName>Status</DisplayName><Description>Status payload.</Description><DataType><DataTypeIdentifier>StatusType</DataTypeIdentifier></DataType></Response><DefinedExecutionErrors><Identifier>CytomatError</Identifier></DefinedExecutionErrors></Command>

  <DefinedExecutionError><Identifier>CytomatError</Identifier><DisplayName>Cytomat Error</DisplayName><Description>Command failed.</Description></DefinedExecutionError>
</Feature>
